PsychoPy2experiment version="2026.2.4"
Settings
  Completed URL = www.danielyon.com
  Experiment info = {'participant': '123'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['blocks_einar.csv', 'motionTrials_Einar.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = motion_mc
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy
        #win.mouseVisible = False #controls whether the cursor is visible or not
        step=.04 #spacing between two adjacent values (because there are 25 dots, the coherence values can only be set in steps of 4% (0.04)

        #h_signal= .8 #high motion coherence signal (80% of dots moving coherently)
        #l_signal=.2 #low coherence signal (20% moving coherently)

        signal1= 0.04
        signal2= 0.20
        signal3= 0.36
        signal4= 0.50


        trial_count=0;
      Begin Routine:
        trial_count=trial_count+1
        frame=0
        mouse_x=[0]*10000
        mouse_y = [0]*10000
        r=0.15 #radius
        d=r*2 #diameter

        #setting the intial position of the 25 dots. REMEMBER we are working in radians, rather than degrees
        d1_angle = 2*3.14*numpy.random.rand() #direction the dot will move in. 2*pi*redius value will give an angle value and therefore a direction that the dot will move in
        rand_ang = 2*3.14*numpy.random.rand() #random angle
        d1_dist = (d*numpy.random.rand())-r
        d1_x = (numpy.cos(rand_ang)*d1_dist) #funky maths to get the x and y coordinates for the dot
        d1_y = (numpy.sin(rand_ang)*d1_dist)
        d1.setPos([d1_x,d1_y]) #original position of the dot

        d2_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d2_dist = (d*numpy.random.rand())-r
        d2_x = (numpy.cos(rand_ang)*d2_dist)
        d2_y = (numpy.sin(rand_ang)*d2_dist)
        d2.setPos([d2_x,d2_y])

        d3_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d3_dist = (d*numpy.random.rand())-r
        d3_x = (numpy.cos(rand_ang)*d3_dist)
        d3_y = (numpy.sin(rand_ang)*d3_dist)
        d3.setPos([d3_x,d3_y])


        d4_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d4_dist = (d*numpy.random.rand())-r
        d4_x = (numpy.cos(rand_ang)*d4_dist)
        d4_y = (numpy.sin(rand_ang)*d4_dist)
        d4.setPos([d4_x,d4_y])

        d5_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d5_dist = (d*numpy.random.rand())-r
        d5_x = (numpy.cos(rand_ang)*d5_dist)
        d5_y = (numpy.sin(rand_ang)*d5_dist)
        d5.setPos([d5_x,d5_y])

        d6_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d6_dist = (d*numpy.random.rand())-r
        d6_x = (numpy.cos(rand_ang)*d6_dist)
        d6_y = (numpy.sin(rand_ang)*d6_dist)
        d6.setPos([d6_x,d6_y])

        d7_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d7_dist = (d*numpy.random.rand())-r
        d7_x = (numpy.cos(rand_ang)*d7_dist)
        d7_y = (numpy.sin(rand_ang)*d7_dist)
        d7.setPos([d7_x,d7_y])

        d8_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d8_dist = (d*numpy.random.rand())-r
        d8_x = (numpy.cos(rand_ang)*d8_dist)
        d8_y = (numpy.sin(rand_ang)*d8_dist)
        d8.setPos([d8_x,d8_y])

        d9_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d9_dist = (d*numpy.random.rand())-r
        d9_x = (numpy.cos(rand_ang)*d9_dist)
        d9_y = (numpy.sin(rand_ang)*d9_dist)
        d9.setPos([d9_x,d9_y])

        d10_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d10_dist = (d*numpy.random.rand())-r
        d10_x = (numpy.cos(rand_ang)*d10_dist)
        d10_y = (numpy.sin(rand_ang)*d10_dist)
        d10.setPos([d10_x,d10_y])

        d11_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d11_dist = (d*numpy.random.rand())-r
        d11_x = (numpy.cos(rand_ang)*d11_dist)
        d11_y = (numpy.sin(rand_ang)*d11_dist)
        d11.setPos([d11_x,d11_y])

        d12_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d12_dist = (d*numpy.random.rand())-r
        d12_x = (numpy.cos(rand_ang)*d12_dist)
        d12_y = (numpy.sin(rand_ang)*d12_dist)
        d12.setPos([d12_x,d12_y])

        d13_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d13_dist = (d*numpy.random.rand())-r
        d13_x = (numpy.cos(rand_ang)*d13_dist)
        d13_y = (numpy.sin(rand_ang)*d13_dist)
        d13.setPos([d13_x,d13_y])

        d14_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d14_dist = (d*numpy.random.rand())-r
        d14_x = (numpy.cos(rand_ang)*d14_dist)
        d14_y = (numpy.sin(rand_ang)*d14_dist)
        d14.setPos([d14_x,d14_y])

        d15_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d15_dist = (d*numpy.random.rand())-r
        d15_x = (numpy.cos(rand_ang)*d15_dist)
        d15_y = (numpy.sin(rand_ang)*d15_dist)
        d15.setPos([d15_x,d15_y])

        d16_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d16_dist = (d*numpy.random.rand())-r
        d16_x = (numpy.cos(rand_ang)*d16_dist)
        d16_y = (numpy.sin(rand_ang)*d16_dist)
        d16.setPos([d16_x,d16_y])

        d17_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d17_dist = (d*numpy.random.rand())-r
        d17_x = (numpy.cos(rand_ang)*d17_dist)
        d17_y = (numpy.sin(rand_ang)*d17_dist)
        d17.setPos([d17_x,d17_y])

        d18_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d18_dist = (d*numpy.random.rand())-r
        d18_x = (numpy.cos(rand_ang)*d18_dist)
        d18_y = (numpy.sin(rand_ang)*d18_dist)
        d18.setPos([d18_x,d18_y])

        d19_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d19_dist = (d*numpy.random.rand())-r
        d19_x = (numpy.cos(rand_ang)*d19_dist)
        d19_y = (numpy.sin(rand_ang)*d19_dist)
        d19.setPos([d19_x,d19_y])

        d20_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d20_dist = (d*numpy.random.rand())-r
        d20_x = (numpy.cos(rand_ang)*d20_dist)
        d20_y = (numpy.sin(rand_ang)*d20_dist)
        d20.setPos([d20_x,d20_y])

        d21_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d21_dist = (d*numpy.random.rand())-r
        d21_x = (numpy.cos(rand_ang)*d21_dist)
        d21_y = (numpy.sin(rand_ang)*d21_dist)
        d21.setPos([d21_x,d21_y])

        d22_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d22_dist = (d*numpy.random.rand())-r
        d22_x = (numpy.cos(rand_ang)*d22_dist)
        d22_y = (numpy.sin(rand_ang)*d22_dist)
        d22.setPos([d22_x,d22_y])

        d23_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d23_dist = (d*numpy.random.rand())-r
        d23_x = (numpy.cos(rand_ang)*d23_dist)
        d23_y = (numpy.sin(rand_ang)*d23_dist)
        d23.setPos([d23_x,d23_y])

        d24_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d24_dist = (d*numpy.random.rand())-r
        d24_x = (numpy.cos(rand_ang)*d24_dist)
        d24_y = (numpy.sin(rand_ang)*d24_dist)
        d24.setPos([d24_x,d24_y])

        d25_angle = 2*3.14*numpy.random.rand()
        rand_ang = 2*3.14*numpy.random.rand()
        d25_dist = (d*numpy.random.rand())-r
        d25_x = (numpy.cos(rand_ang)*d25_dist)
        d25_y = (numpy.sin(rand_ang)*d25_dist)
        d25.setPos([d25_x,d25_y])

        #if strength==1: #'Strength' variable found in motionTrial spreadsheet. Refers to the strength of the signal (weak or strong)
            #signal = h_signal #If strength=1 then there will be high motion coherence (h_signal, defined in Begin Exp tab)
        #elif strength==-1:
            #signal=l_signal

        if strength==1:
            signal = signal1
        elif strength==2:
            signal=signal2
        elif strength==3:
            signal=signal3
        elif strength==4:
            signal=signal4


        #This section decides how many and which dots will move coherently
        if signal>=1*step: #e.g. if the signal was 0.8, this is >1*step (1*0.04)= 0.04.
            d1_angle=0 #...therefore, d1_angle (or direction the dot will move in) will be changed to 0 (originally randomly set above). 0 = moving directly along the x axis.
        if signal>=2*step:
            d2_angle=0 #as soon as a threshold is reached (decided by signal), the dots will move in the random direction the variable d1_angle was originally allocated
        if signal>=3*step:
            d3_angle=0
        if signal>=4*step:
            d4_angle=0
        if signal>=5*step:
            d5_angle=0
        if signal>=6*step:
            d6_angle=0
        if signal>=7*step:
            d7_angle=0
        if signal>=8*step:
            d8_angle=0
        if signal>=9*step:
            d9_angle=0
        if signal>=10*step:
            d10_angle=0
        if signal>=11*step:
            d11_angle=0
        if signal>=12*step:
            d12_angle=0
        if signal>=13*step:
            d13_angle=0
        if signal>=14*step:
            d14_angle=0
        if signal>=15*step:
            d15_angle=0
        if signal>=16*step:
            d16_angle=0
        if signal>=17*step:
            d17_angle=0
        if signal>=18*step:
            d18_angle=0
        if signal>=19*step:
            d19_angle=0
        if signal>=20*step:
            d20_angle=0
        if signal>=21*step:
            d21_angle=0
        if signal>=22*step:
            d22_angle=0
        if signal>=23*step:
            d23_angle=0
        if signal>=24*step:
            d24_angle=0
        if signal>=25*step:
            d25_angle=0
        thisExp.addData('signal', signal) #saving out the data
      Each Frame:
        frame=frame+1
        #Speed variable = how much the dot moves in each frame (pos no.= move right, neg no.=move left)
        speed = 0.01*direction #direction variable defined in motion trials spreadsheet

        #dot 1
        d1_p = d1.pos
        d1_x = d1_p[0]+(numpy.cos(d1_angle)*speed) #how much we are adding to x and y coordinates to decide the final location
        d1_y = d1_p[1]+(numpy.sin(d1_angle)*speed)

        #below makes sure that the dot doesn't leave the ring, if it does go outside the ring the code will just draw the dot randomly somewhere else and then repeat the loop for each frame until the presentation time is over
        if ((d1_p[0]**2)+(d1_p[1]**2))**.5 >r:
            d1_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d1_x = (numpy.cos(rand_ang)*d1_dist)
            d1_y = (numpy.sin(rand_ang)*d1_dist)
            d1.setPos([d1_x,d1_y])
        else:
            d1.setPos([d1_x,d1_y])
        #dot2
        d2_p = d2.pos
        d2_x = d2_p[0]+(numpy.cos(d2_angle)*speed)
        d2_y = d2_p[1]+(numpy.sin(d2_angle)*speed)

        if ((d2_p[0]**2)+(d2_p[1]**2))**.5 >r:
            d2_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d2_x = (numpy.cos(rand_ang)*d2_dist)
            d2_y = (numpy.sin(rand_ang)*d2_dist)
            d2.setPos([d2_x,d2_y])
        else:
            d2.setPos([d2_x,d2_y])
        #dot3
        d3_p = d3.pos
        d3_x = d3_p[0]+(numpy.cos(d3_angle)*speed)
        d3_y = d3_p[1]+(numpy.sin(d3_angle)*speed)

        if ((d3_p[0]**2)+(d3_p[1]**2))**.5 >r:
            d3_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d3_x = (numpy.cos(rand_ang)*d3_dist)
            d3_y = (numpy.sin(rand_ang)*d3_dist)
            d3.setPos([d3_x,d3_y])
        else:
            d3.setPos([d3_x,d3_y])

        #dot4
        d4_p = d4.pos
        d4_x = d4_p[0]+(numpy.cos(d4_angle)*speed)
        d4_y = d4_p[1]+(numpy.sin(d4_angle)*speed)

        if ((d4_p[0]**2)+(d4_p[1]**2))**.5 >r:
            d4_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d4_x = (numpy.cos(rand_ang)*d4_dist)
            d4_y = (numpy.sin(rand_ang)*d4_dist)
            d4.setPos([d4_x,d4_y])
        else:
            d4.setPos([d4_x,d4_y])

        #dot5
        d5_p = d5.pos
        d5_x = d5_p[0]+(numpy.cos(d5_angle)*speed)
        d5_y = d5_p[1]+(numpy.sin(d5_angle)*speed)

        if ((d5_p[0]**2)+(d5_p[1]**2))**.5 >r:
            d5_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d5_x = (numpy.cos(rand_ang)*d5_dist)
            d5_y = (numpy.sin(rand_ang)*d5_dist)
            d5.setPos([d5_x,d5_y])
        else:
            d5.setPos([d5_x,d5_y])

        #dot6
        d6_p = d6.pos
        d6_x = d6_p[0]+(numpy.cos(d6_angle)*speed)
        d6_y = d6_p[1]+(numpy.sin(d6_angle)*speed)

        if ((d6_p[0]**2)+(d6_p[1]**2))**.5 >r:
            d6_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d6_x = (numpy.cos(rand_ang)*d6_dist)
            d6_y = (numpy.sin(rand_ang)*d6_dist)
            d6.setPos([d6_x,d6_y])
        else:
            d6.setPos([d6_x,d6_y])

        #dot7
        d7_p = d7.pos
        d7_x = d7_p[0]+(numpy.cos(d7_angle)*speed)
        d7_y = d7_p[1]+(numpy.sin(d7_angle)*speed)

        if ((d7_p[0]**2)+(d7_p[1]**2))**.5 >r:
            d7_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d7_x = (numpy.cos(rand_ang)*d7_dist)
            d7_y = (numpy.sin(rand_ang)*d7_dist)
            d7.setPos([d7_x,d7_y])
        else:
            d7.setPos([d7_x,d7_y])

        #dot8
        d8_p = d8.pos
        d8_x = d8_p[0]+(numpy.cos(d8_angle)*speed)
        d8_y = d8_p[1]+(numpy.sin(d8_angle)*speed)

        if ((d8_p[0]**2)+(d8_p[1]**2))**.5 >r:
            d8_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d8_x = (numpy.cos(rand_ang)*d8_dist)
            d8_y = (numpy.sin(rand_ang)*d8_dist)
            d8.setPos([d8_x,d8_y])
        else:
            d8.setPos([d8_x,d8_y])

        #dot9
        d9_p = d9.pos
        d9_x = d9_p[0]+(numpy.cos(d9_angle)*speed)
        d9_y = d9_p[1]+(numpy.sin(d9_angle)*speed)

        if ((d9_p[0]**2)+(d9_p[1]**2))**.5 >r:
            d9_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d9_x = (numpy.cos(rand_ang)*d9_dist)
            d9_y = (numpy.sin(rand_ang)*d9_dist)
            d9.setPos([d9_x,d9_y])
        else:
            d9.setPos([d9_x,d9_y])

        #dot10
        d10_p = d10.pos
        d10_x = d10_p[0]+(numpy.cos(d10_angle)*speed)
        d10_y = d10_p[1]+(numpy.sin(d10_angle)*speed)

        if ((d10_p[0]**2)+(d10_p[1]**2))**.5 >r:
            d10_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d10_x = (numpy.cos(rand_ang)*d10_dist)
            d10_y = (numpy.sin(rand_ang)*d10_dist)
            d10.setPos([d10_x,d10_y])
        else:
            d10.setPos([d10_x,d10_y])

        #dot11
        d11_p = d11.pos
        d11_x = d11_p[0]+(numpy.cos(d11_angle)*speed)
        d11_y = d11_p[1]+(numpy.sin(d11_angle)*speed)

        if ((d11_p[0]**2)+(d11_p[1]**2))**.5 >r:
            d11_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d11_x = (numpy.cos(rand_ang)*d11_dist)
            d11_y = (numpy.sin(rand_ang)*d11_dist)
            d11.setPos([d11_x,d11_y])
        else:
            d11.setPos([d11_x,d11_y])

        #dot12
        d12_p = d12.pos
        d12_x = d12_p[0]+(numpy.cos(d12_angle)*speed)
        d12_y = d12_p[1]+(numpy.sin(d12_angle)*speed)

        if ((d12_p[0]**2)+(d12_p[1]**2))**.5 >r:
            d12_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d12_x = (numpy.cos(rand_ang)*d12_dist)
            d12_y = (numpy.sin(rand_ang)*d12_dist)
            d12.setPos([d12_x,d12_y])
        else:
            d12.setPos([d12_x,d12_y])

        #dot13
        d13_p = d13.pos
        d13_x = d13_p[0]+(numpy.cos(d13_angle)*speed)
        d13_y = d13_p[1]+(numpy.sin(d13_angle)*speed)

        if ((d13_p[0]**2)+(d13_p[1]**2))**.5 >r:
            d13_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d13_x = (numpy.cos(rand_ang)*d13_dist)
            d13_y = (numpy.sin(rand_ang)*d13_dist)
            d13.setPos([d13_x,d13_y])
        else:
            d13.setPos([d13_x,d13_y])

        #dot14
        d14_p = d14.pos
        d14_x = d14_p[0]+(numpy.cos(d14_angle)*speed)
        d14_y = d14_p[1]+(numpy.sin(d14_angle)*speed)

        if ((d14_p[0]**2)+(d14_p[1]**2))**.5 >r:
            d14_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d14_x = (numpy.cos(rand_ang)*d14_dist)
            d14_y = (numpy.sin(rand_ang)*d14_dist)
            d14.setPos([d14_x,d14_y])
        else:
            d14.setPos([d14_x,d14_y])

        #dot15
        d15_p = d15.pos
        d15_x = d15_p[0]+(numpy.cos(d15_angle)*speed)
        d15_y = d15_p[1]+(numpy.sin(d15_angle)*speed)

        if ((d15_p[0]**2)+(d15_p[1]**2))**.5 >r:
            d15_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d15_x = (numpy.cos(rand_ang)*d15_dist)
            d15_y = (numpy.sin(rand_ang)*d15_dist)
            d15.setPos([d15_x,d15_y])
        else:
            d15.setPos([d15_x,d15_y])

        #dot16
        d16_p = d16.pos
        d16_x = d16_p[0]+(numpy.cos(d16_angle)*speed)
        d16_y = d16_p[1]+(numpy.sin(d16_angle)*speed)

        if ((d16_p[0]**2)+(d16_p[1]**2))**.5 >r:
            d16_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d16_x = (numpy.cos(rand_ang)*d16_dist)
            d16_y = (numpy.sin(rand_ang)*d16_dist)
            d16.setPos([d16_x,d16_y])
        else:
            d16.setPos([d16_x,d16_y])

        #dot17
        d17_p = d17.pos
        d17_x = d17_p[0]+(numpy.cos(d17_angle)*speed)
        d17_y = d17_p[1]+(numpy.sin(d17_angle)*speed)

        if ((d17_p[0]**2)+(d17_p[1]**2))**.5 >r:
            d17_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d17_x = (numpy.cos(rand_ang)*d17_dist)
            d17_y = (numpy.sin(rand_ang)*d17_dist)
            d17.setPos([d17_x,d17_y])
        else:
            d17.setPos([d17_x,d17_y])

        #dot18
        d18_p = d18.pos
        d18_x = d18_p[0]+(numpy.cos(d18_angle)*speed)
        d18_y = d18_p[1]+(numpy.sin(d18_angle)*speed)

        if ((d18_p[0]**2)+(d18_p[1]**2))**.5 >r:
            d18_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d18_x = (numpy.cos(rand_ang)*d18_dist)
            d18_y = (numpy.sin(rand_ang)*d18_dist)
            d18.setPos([d18_x,d18_y])
        else:
            d18.setPos([d18_x,d18_y])

        #dot19
        d19_p = d19.pos
        d19_x = d19_p[0]+(numpy.cos(d19_angle)*speed)
        d19_y = d19_p[1]+(numpy.sin(d19_angle)*speed)

        if ((d19_p[0]**2)+(d19_p[1]**2))**.5 >r:
            d19_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d19_x = (numpy.cos(rand_ang)*d19_dist)
            d19_y = (numpy.sin(rand_ang)*d19_dist)
            d19.setPos([d19_x,d19_y])
        else:
            d19.setPos([d19_x,d19_y])

        #dot20
        d20_p = d20.pos
        d20_x = d20_p[0]+(numpy.cos(d20_angle)*speed)
        d20_y = d20_p[1]+(numpy.sin(d20_angle)*speed)

        if ((d20_p[0]**2)+(d20_p[1]**2))**.5 >r:
            d20_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d20_x = (numpy.cos(rand_ang)*d20_dist)
            d20_y = (numpy.sin(rand_ang)*d20_dist)
            d20.setPos([d20_x,d20_y])
        else:
            d20.setPos([d20_x,d20_y])

        #dot21
        d21_p = d21.pos
        d21_x = d21_p[0]+(numpy.cos(d21_angle)*speed)
        d21_y = d21_p[1]+(numpy.sin(d21_angle)*speed)

        if ((d21_p[0]**2)+(d21_p[1]**2))**.5 >r:
            d21_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d21_x = (numpy.cos(rand_ang)*d21_dist)
            d21_y = (numpy.sin(rand_ang)*d21_dist)
            d21.setPos([d21_x,d21_y])
        else:
            d21.setPos([d21_x,d21_y])

        #dot22
        d22_p = d22.pos
        d22_x = d22_p[0]+(numpy.cos(d22_angle)*speed)
        d22_y = d22_p[1]+(numpy.sin(d22_angle)*speed)

        if ((d22_p[0]**2)+(d22_p[1]**2))**.5 >r:
            d22_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d22_x = (numpy.cos(rand_ang)*d22_dist)
            d22_y = (numpy.sin(rand_ang)*d22_dist)
            d22.setPos([d22_x,d22_y])
        else:
            d22.setPos([d22_x,d22_y])

        #dot23
        d23_p = d23.pos
        d23_x = d23_p[0]+(numpy.cos(d23_angle)*speed)
        d23_y = d23_p[1]+(numpy.sin(d23_angle)*speed)

        if ((d23_p[0]**2)+(d23_p[1]**2))**.5 >r:
            d23_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d23_x = (numpy.cos(rand_ang)*d23_dist)
            d23_y = (numpy.sin(rand_ang)*d23_dist)
            d23.setPos([d23_x,d23_y])
        else:
            d23.setPos([d23_x,d23_y])

        #dot24
        d24_p = d24.pos
        d24_x = d24_p[0]+(numpy.cos(d24_angle)*speed)
        d24_y = d24_p[1]+(numpy.sin(d24_angle)*speed)

        if ((d24_p[0]**2)+(d24_p[1]**2))**.5 >r:
            d24_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d24_x = (numpy.cos(rand_ang)*d24_dist)
            d24_y = (numpy.sin(rand_ang)*d24_dist)
            d24.setPos([d24_x,d24_y])
        else:
            d24.setPos([d24_x,d24_y])

        #dot25
        d25_p = d25.pos
        d25_x = d25_p[0]+(numpy.cos(d25_angle)*speed)
        d25_y = d25_p[1]+(numpy.sin(d25_angle)*speed)

        if ((d25_p[0]**2)+(d25_p[1]**2))**.5 >r:
            d25_dist = (d*numpy.random.rand())-r
            rand_ang = 2*3.14*numpy.random.rand()
            d25_x = (numpy.cos(rand_ang)*d25_dist)
            d25_y = (numpy.sin(rand_ang)*d25_dist)
            d25.setPos([d25_x,d25_y])
        else:
            d25.setPos([d25_x,d25_y])

        #dots.setSpeed(speed)
      End Routine:
        thisExp.addData('d1_angle', d1_angle);
        thisExp.addData('d2_angle', d2_angle);
        thisExp.addData('d3_angle', d3_angle);
        thisExp.addData('d4_angle', d4_angle);
        thisExp.addData('d5_angle', d5_angle);
        thisExp.addData('d6_angle', d6_angle);
        thisExp.addData('d7_angle', d7_angle);
        thisExp.addData('d8_angle', d8_angle);
        thisExp.addData('d9_angle', d9_angle);
        thisExp.addData('d10_angle', d10_angle);
        thisExp.addData('d11_angle', d11_angle);
        thisExp.addData('d12_angle', d12_angle);
        thisExp.addData('d13_angle', d13_angle);
        thisExp.addData('d14_angle', d14_angle);
        thisExp.addData('d15_angle', d15_angle);
        thisExp.addData('d16_angle', d16_angle);
        thisExp.addData('d17_angle', d17_angle);
        thisExp.addData('d18_angle', d18_angle);
        thisExp.addData('d19_angle', d19_angle);
        thisExp.addData('d20_angle', d20_angle);
        thisExp.addData('d21_angle', d21_angle);
        thisExp.addData('d22_angle', d22_angle);
        thisExp.addData('d23_angle', d23_angle);
        thisExp.addData('d24_angle', d24_angle);
        thisExp.addData('d25_angle', d25_angle);

        type1_resp = 999; #placeholder for missed trial
        trial_correct = 999;
        if q_resp.keys =='1':
            type1_resp = -1;
        elif q_resp.keys == '2':
            type1_resp = 1;

        if type1_resp ==999:
            trial_correct = 999;
        elif type1_resp ==direction:
            trial_correct = 1;
        else:
            trial_correct = 0;

        thisExp.addData('type1_resp', type1_resp);
        thisExp.addData('trial_correct', trial_correct);
    PolygonComponent d1
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d2
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d3
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d4
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d5
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d6
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d7
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d8
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d9
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d10
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d11
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent d12
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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
    TextComponent q_text
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Moving LEFT or RIGHT?

        (1 = Left, 2 = Right)
    KeyboardComponent q_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine fixation
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    CodeComponent code_13
      Code Type = Auto->JS
  Routine thanks
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        This is the end of the study.

        Thank you for taking part.

        You will shortly be automatically redirected to Prolific. Do not close this window before you are prompted, or your data will not be recorded.

        If you would like to get in touch with the research team, please email Prof Daniel Yon at d.yon@bbk.ac.uk
  Routine main_instructions
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    TextComponent main_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this task, we will show you patterns of moving dots - and you will make judgements about the direction in which the dots are moving.

        At some point in the experiment, we will also ask you to report how confident you are in the judgments you are making.

        Press SPACE to continue.
    KeyboardComponent main_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine type1_q
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    TextComponent type1_q_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Did the dots move LEFT or RIGHT?

        (1 = Left, 2 = Right)
    KeyboardComponent type1_key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        type1_resp = 999; #placeholder for missed trial
        trial_correct = 999;
        if type1_key_resp.keys =='1':
            type1_resp = -1;
        elif type1_key_resp.keys == '2':
            type1_resp = 1;

        if type1_resp ==999:
            trial_correct = 999;
        elif type1_resp ==direction:
            trial_correct = 1;
        else:
            trial_correct = 0;

        thisExp.addData('type1_resp', type1_resp);
        thisExp.addData('trial_correct', trial_correct);
  Routine type2_q
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    TextComponent type2_q_text
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        How confident are you that YOUR LAST MOTION DECISION was correct?
    TextComponent text_below
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        (Adjust with mouse, press SPACE to submit)
    KeyboardComponent type2_q_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent line
      fillColor = white
      shape = rectangle
      size = (0.005, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent marker
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        confidence_marker = 999;
        confidence_submitted=0;
        high_or_low = 0;

        if blockCode!=2: #only display this routine in the final 'one trial' block, denoted as block code 2
            continueRoutine = False;
      Each Frame:
        mouse_pos = type2_mouse.getPos();
        mouse_y = mouse_pos[1];
        if mouse_y>.075:
            mouse_y=.075;

        if mouse_y<-.075:
            mouse_y=-.075
        marker.setPos((0,mouse_y));
      End Routine:
        if type2_q_key_resp.keys =='space':
            confidence_submitted=1;

        confidence_marker = mouse_y;

        '''
        if blockCode!=-1:
            thisExp.addData('confidence_marker', confidence_marker)
        if confidence_marker >= 0.05625:
            high_confidence = high_confidence+0.5
        if confidence_marker == 0.075:
            high_confidence = high_confidence+1

        if confidence_marker <= -0.05625:
            low_confidence = low_confidence+0.05
        if confidence_marker == 0.05625:
            low_confidence = low_confidence+1
            '''

        if blockCode!=-1:
            thisExp.addData('confidence_marker', confidence_marker)
        if blockCode == 2:
            if confidence_marker > 0:
                high_or_low = 1 #1 = high conf
            if confidence_marker < 0:
                high_or_low = -1
    MouseComponent type2_mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent low_text
      letterHeight = 0.02
      pos = (0, -0.12)
      startVal [time (s)] = 0.0
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      text:
        Lowest
        Confidence
    TextComponent high_text
      letterHeight = 0.02
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        Highest
        Confidence
  Routine blank
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    TextComponent blank_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine block_instructions
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Placeholder
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    KeyboardComponent block_resp
      allowedKeys = 'space','y', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if blockCode==2:
            continueRoutine=False; #don't show instructions again on final 'critical' trial
        if blockCode ==-1:
            block_str = "First we will practice making judgments about the dot clouds. \n\n You will see a brief cloud of moving dots and have to judge whether the dots moved mostly LEFT or RIGHT using the 1 and 2 keys on your keyboard. \n\n Press SPACE to continue" ;
        elif blockCode==1:
            block_str = "Now we will begin the main task. This will be same as practice. \n\n However, you will no longer receive trial-by-trial feedback. \n\n IMPORTANTLY, at one point in the task, we will ask you to rate how confident you are in your judgement after seeing the stimulus. \n\n How well your confidence matches the accuracy of your judgement will determine the performance-related bonus you receive on Prolific. \n\n Press SPACE to continue" ;
        text.setText(block_str)


        #Now we will begin the main task. This will be same as practice. \n\n However, you will no longer receive trial-by-trial feedback \n\n IMPORTANTLY, However, at one point in the task, we will ask you to make another additional judgment after the stimulus. \n This judgment will determine the performance-related bonus you receive on Prolific \n\n Press SPACE to continue
  Routine frequency_instructions
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        freq_str = '';

        if blockCode<1:
            continueRoutine = False;

        if blockCode ==1:
            freq_str = "In the next block confidence reports will be: \n\n RARE \n\n You won't need to report your confidence on most trials \n\n Press SPACE to begin" ;

        elif blockCode==2:
            freq_str = "In the next block confidence reports will be: \n\n FREQUENT \n\n You will need to report your confidence on most trials \n\n Press SPACE to begin" ;

        frequency_text.setText(freq_str)
    TextComponent frequency_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.5
      text = PLACEHOLDER
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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  Routine feedback
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    TextComponent feedback_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = placeholder
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if blockCode>0:
            continueRoutine = False;




        if trial_correct ==1:
            feedback_str = 'Correct!';
            points_str = '+10 points';
        elif trial_correct==0:
            feedback_str = 'Incorrect';
            points_str = '0 points';
        elif trial_correct ==999:
            feedback_str = 'Too slow!';

        if confidence_submitted ==999:
            feedback_str = 'Too slow!';
        feedback_text.setText(feedback_str);
  Routine break_screen
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    TextComponent break_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        PLACEHOLDER
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        block_count=0;
      Begin Routine:
        if blockCode<1:
            continueRoutine = False;

        if blockCode>0:
            block_count = block_count+1;

            breakstr = "This is a break. \n\n You have completed " + str(block_count) +" out of 8 main test blocks \n\n This break screen will last for a maximum of two minutes \n\n Press SPACE to continue."

            break_text.setText(breakstr);
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine Comprehension_check
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        I understand that at some point I may be asked to make a confidence rating about my judgement after viewing the motion stimulus, and that this will be used to calculate my bonus payment.

        Please indicate your response by pressing one of the following:

        n = No
        y = Yes
    KeyboardComponent Comprehension
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if blockCode != 1: #only display this on the first block
            continueRoutine = False;
      End Routine:
        if Comprehension.keys =='y':
            trials_2.finished = True
  Routine Bonus
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    TextComponent bonus_sum
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Placeholder
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        bonus_score = 0
      Begin Routine:
        if trial_correct == 1 and high_or_low == 1:
            bonus_score += 1
            bonus_str = 'You have earned a 50p bonus! This will be added to your participation payment.Press SPACE to continue.';
        elif trial_correct==1 and high_or_low == -1:
            bonus_score += 1
            bonus_str = 'You have earned a 50p bonus!This will be added to your participation payment. Press SPACE to continue.';
        else:
            bonus_str = 'Sorry, you did not get a bonus. Press SPACE to continue.'

        bonus_sum.setText(bonus_str);
      End Routine:
        thisExp.addData('bonus_score', bonus_score);
        thisExp.addData('high_or_low', high_or_low);
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine main_instructions
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = blocks_ot.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blockCode', np.int64(-1)), ('trialReps', np.int64(1)), ('rowsUsed', '16:17')]),
      OrderedDict([('blockCode', np.int64(1)), ('trialReps', np.int64(1)), ('rowsUsed', '00:16')]),
      OrderedDict([('blockCode', np.int64(2)), ('trialReps', np.int64(1)), ('rowsUsed', '16:17')])]
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine block_instructions
      Routine Comprehension_check
    LoopTerminator trials_2
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $rowsUsed
      conditionsFile = motionTrials_ot.csv
      loopType = random
      nReps = trialReps
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      conditions:
        [OrderedDict([('uniquecode', np.int64(1)), ('direction', np.int64(-1)), ('strength', np.int64(1))]),
        OrderedDict([('uniquecode', np.int64(2)), ('direction', np.int64(1)), ('strength', np.int64(1))]),
        OrderedDict([('uniquecode', np.int64(3)), ('direction', np.int64(-1)), ('strength', np.int64(2))]),
        OrderedDict([('uniquecode', np.int64(4)), ('direction', np.int64(1)), ('strength', np.int64(2))]),
        OrderedDict([('uniquecode', np.int64(5)), ('direction', np.int64(-1)), ('strength', np.int64(3))]),
        OrderedDict([('uniquecode', np.int64(6)), ('direction', np.int64(1)), ('strength', np.int64(3))]),
        OrderedDict([('uniquecode', np.int64(7)), ('direction', np.int64(-1)), ('strength', np.int64(4))]),
        OrderedDict([('uniquecode', np.int64(8)), ('direction', np.int64(1)), ('strength', np.int64(4))]),
        OrderedDict([('uniquecode', np.int64(9)), ('direction', np.int64(-1)), ('strength', np.int64(1))]),
        OrderedDict([('uniquecode', np.int64(10)), ('direction', np.int64(1)), ('strength', np.int64(1))]),
        OrderedDict([('uniquecode', np.int64(11)), ('direction', np.int64(-1)), ('strength', np.int64(2))]),
        OrderedDict([('uniquecode', np.int64(12)), ('direction', np.int64(1)), ('strength', np.int64(2))]),
        OrderedDict([('uniquecode', np.int64(13)), ('direction', np.int64(-1)), ('strength', np.int64(3))]),
        OrderedDict([('uniquecode', np.int64(14)), ('direction', np.int64(1)), ('strength', np.int64(3))]),
        OrderedDict([('uniquecode', np.int64(15)), ('direction', np.int64(-1)), ('strength', np.int64(4))])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
      Routine fixation
      Routine trial
      Routine blank
      Routine type2_q
      Routine feedback
    LoopTerminator trials
  LoopTerminator Blocks
  Routine Bonus
  Routine thanks
